<PlusConfiguration version="2.1" PlusRevision="Plus-2.9.0.59a10108 - Win64">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: Epiphan framegrabber + NDI Polaris tracker (Probe, Reference, Stylus) RadboudUMC Test2" Description="Epiphan framegrabber image acquisition + NDI Polaris for tracking" />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="5"
      BaudRate="115200"
      LocalTimeOffsetSec="0.0"
      CheckDSR="true">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/8700339.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/8700340.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/8700449.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
        </DataSource>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="VideoDevice" Type="Epiphan" ClipRectangleOrigin="496 156" ClipRectangleSize="776 716">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
      <Parameters />
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.000599533	-0.00444443	0.0678178	-38.6237
        -0.0691588	0.00027447	0.000601536	27.774
        -0.00020847	-0.0666316	-0.00452107	-132.152
        0	0	0	1"
       Error="0.300521" Date="121924_153243" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        -0.00277664	-0.999909	-0.0132063	30.086
        0.9998	-0.00303747	0.0197719	64.3528
        -0.0198102	-0.0131488	0.999717	-95.5404
        0	0	0	1"
       Error="0.911713" Date="121924_151428" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        0.997895	0	-0.0648563	-13.4101
        0.000413718	-0.99998	0.00636556	1.31618
        -0.064855	-0.00637899	-0.997874	-206.327
        0	0	0	1"
       Error="0.283731" Date="121924_150348" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.069163	0	0	0
        0	0.0667788	0	0
        0	0	0.0679709	0
        0	0	0	1"
       Date="121924_153243" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1	0	0	-35
        0	1	0	-10
        0	0	1	-5
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.0690902"
    MorphologicalOpeningCircleRadiusMm="0.2"
    MorphologicalOpeningBarSizeMm="2.4"
    ClipRectangleOrigin="91 274"
    ClipRectangleSize="623 406"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10"
    ThresholdImagePercent="15"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0"
    NumberOfMaximumFiducialPointCandidates="40" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>
      <Planes>
        <Plane Name="Superior" BasePoint="5.5 3.0 35.0" EndPoint1="135.0 3.0 35.0" EndPoint2="135.0 55.0 35.0" />
        <Plane Name="Inferior" BasePoint="5.5 55.0 0.0" EndPoint1="135.0 55.0 0.0" EndPoint2="135.0 5.5 0.0" />
        <Plane Name="Outside Unmarked" BasePoint="140.0 5.0 30.0" EndPoint1="140.0 50.0 30.0" EndPoint2="140.0 50.0 5.0" />
        <Plane Name="Inside Unmarked" BasePoint="125.0 40.0 30.0" EndPoint1="125.0 20.0 10.0" EndPoint2="125.0 40.0 10.0" />
        <Plane Name="Outside Marked" BasePoint="0.0 40.0 30.0" EndPoint1="0.0 40.0 5.5" EndPoint2="0.0 15.5 5.5" />
        <Plane Name="Outside Posterior" BasePoint="130.0 0.0 30.0" EndPoint1="20.0 0.0 30.0" EndPoint2="20.0 0.0 15.0" />
        <Plane Name="Inside Posterior" BasePoint="110.0 10.0 30.0" EndPoint1="40.0 10.0 30.0" EndPoint2="30.0 10.0 10.0" />
        <Plane Name="Outside Anterior" BasePoint="130.0 60.0 30.0" EndPoint1="20.0 60.0 30.0" EndPoint2="20.0 60.0 5.0" />
      </Planes>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MEAN"
    FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="140"
    NumberOfValidationImagesToAcquire="70"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream"
    FreeHandStartupDelaySec="3" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPhantomLinearObjectRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPlusProbeCalibrationAlgo ImageCoordinateFrame="Image" ProbeCoordinateFrame="Probe" PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" />
  <vtkPlusTemporalCalibrationAlgo ClipRectangleOrigin="91 274" ClipRectangleSize="623 406" />
</PlusConfiguration>
