<PlusConfiguration version="2.1" PlusRevision="Plus-2.8.0.62873a16 - Win32">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: Epiphan (to Roger&apos;s PC) + NDI Polaris tracker (Probe, Reference, Stylus) UT Test0" Description="Image acquisition Epiphan to Roger&apos;s PC (125%, portrait, flipped) + NDI Polaris for tracking (First test in Neuromechatronics Lab) " />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="3"
      BaudRate="115200"
      LocalTimeOffsetSec="0.0"
      CheckDSR="true">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/8700339.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/8700340.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/8700449.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
        </DataSource>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="VideoDevice" Type="Epiphan" ClipRectangleOrigin="1068 216" ClipRectangleSize="492 812">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
      <Parameters />
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
      <Parameters />
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.0445531	0.009564	0.0503877	-36.5964
        -0.0538155	-0.0020959	0.0408818	17.9664
        -0.00673173	-0.0594662	0.00666301	-119.345
        0	0	0	1"
       Error="1.75804" Date="021226_122117" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        0.00164226	-0.999843	-0.0176157	29.2582
        0.999407	0.00103517	0.0344168	64.4871
        -0.0343932	-0.0176618	0.999252	-95.4207
        0	0	0	1"
       Error="0.973989" Date="021026_175821" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        0.997608	0	-0.069119	-14.3075
        0.000519279	-0.999972	0.00749487	1.55143
        -0.069117	-0.00751283	-0.99758	-206.498
        0	0	0	1"
       Error="0.263201" Date="021026_174813" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.0736195	0	0	0
        0	0.0560238	0	0
        0	0	0.0652276	0
        0	0	0	1"
       Date="021226_122117" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1	0	0	-35
        0	1	0	-10
        0	0	1	-5
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.0608808"
    MorphologicalOpeningCircleRadiusMm="0.2"
    MorphologicalOpeningBarSizeMm="2.5"
    ClipRectangleOrigin="46 126"
    ClipRectangleSize="404 548"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0"
    NumberOfMaximumFiducialPointCandidates="40" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:I1_h1" EndPointFront="40.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:J1_j1" EndPointFront="45.0 0.0 20.0" EndPointBack="45.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_i3" EndPointFront="35.0 0.0 10.0" EndPointBack="40.0 40.0 10.0" />
        <Wire Name="6:J3_j3" EndPointFront="45.0 0.0 10.0" EndPointBack="45.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:G5_g5" EndPointFront="30.0 0.0 0.0" EndPointBack="30.0 40.0 0.0" />
        <Wire Name="2:I5_h5" EndPointFront="40.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="3:J5_j5" EndPointFront="45.0 0.0 0.0" EndPointBack="45.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>
      <Planes>
        <Plane Name="Superior" BasePoint="5.5 3.0 35.0" EndPoint1="135.0 3.0 35.0" EndPoint2="135.0 55.0 35.0" />
        <Plane Name="Inferior" BasePoint="5.5 55.0 0.0" EndPoint1="135.0 55.0 0.0" EndPoint2="135.0 5.5 0.0" />
        <Plane Name="Outside Unmarked" BasePoint="140.0 5.0 30.0" EndPoint1="140.0 50.0 30.0" EndPoint2="140.0 50.0 5.0" />
        <Plane Name="Inside Unmarked" BasePoint="125.0 40.0 30.0" EndPoint1="125.0 20.0 10.0" EndPoint2="125.0 40.0 10.0" />
        <Plane Name="Outside Marked" BasePoint="0.0 40.0 30.0" EndPoint1="0.0 40.0 5.5" EndPoint2="0.0 15.5 5.5" />
        <Plane Name="Outside Posterior" BasePoint="130.0 0.0 30.0" EndPoint1="20.0 0.0 30.0" EndPoint2="20.0 0.0 15.0" />
        <Plane Name="Inside Posterior" BasePoint="110.0 10.0 30.0" EndPoint1="40.0 10.0 30.0" EndPoint2="30.0 10.0 10.0" />
        <Plane Name="Outside Anterior" BasePoint="130.0 60.0 30.0" EndPoint1="20.0 60.0 30.0" EndPoint2="20.0 60.0 5.0" />
      </Planes>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="0.25 0.25 0.25"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MAXIMUM"
    FillHoles="ON" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="140"
    NumberOfValidationImagesToAcquire="70"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream"
    FreeHandStartupDelaySec="3" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPhantomLinearObjectRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPlusProbeCalibrationAlgo ImageCoordinateFrame="Image" ProbeCoordinateFrame="Probe" PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" />
  <vtkPlusTemporalCalibrationAlgo ClipRectangleOrigin="46 126" ClipRectangleSize="404 548" />
</PlusConfiguration>
